PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'Language': "['English', 'English_easy', 'Deutsch', 'Chinese_simplified', 'Chinese_traditional']"}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = white
  expName = test_language
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Routines
  Routine init
    CodeComponent init_code
      Code Type = Py
      Begin Experiment:
        import datetime
        import os

        from common.config import WMCConfig
        from common.experiment_messages import ExperimentMessages
        from common.instructions import Instructions

        # for catching experiment quit key
        from psychopy.hardware.keyboard import Keyboard
        experiment_keyboard = Keyboard()

        thisExp.extraInfo['datetime'] = datetime.datetime.today()

        language = thisExp.extraInfo['Language']

        config = WMCConfig(language=language)
        expmsgs = ExperimentMessages(language=language,
                                     encoding=config.experiment_messages.encoding)

        experiment_messages = list(expmsgs.items())
        n_experiment_messages = len(experiment_messages)
        print()
        print("==================================================")
        print(experiment_messages)
        print("number of experiment messages:", n_experiment_messages)
        print("==================================================")
        print()


        instructions = Instructions(language)
        instruction_filepaths = (
            instructions.get_instructions('init') +
            instructions.get_instructions('mu') +
            instructions.get_instructions('os') +
            instructions.get_instructions('ss') +
            instructions.get_instructions('sstm')
        )
        n_instructions = len(instruction_filepaths)
        print()
        print("==================================================")
        print(instruction_filepaths)
        print("number of instructions:", n_instructions)
        print("==================================================")

        # set text wrap width to 90% of screen width (in height units)
        text_wrap_width = win.size[0] / win.size[1] * 0.9
  Routine experiment_message
    CodeComponent code_experiment_message
      Code Type = Py
      Begin Routine:
        current_expmsg_key, current_expmsg_string = experiment_messages.pop(0)
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent text_experiment_message_key
      color = black
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $current_expmsg_key
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    TextComponent text_experiment_message
      color = black
      font [set every repeat] = $config.experiment_messages.font
      letterHeight [set every repeat] = $config.experiment_messages.size
      startVal [time (s)] = 0.0
      text [set every repeat] = $current_expmsg_string
      wrapWidth = text_wrap_width
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    KeyboardComponent key_resp_experiment_message
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ss_sentence
    CodeComponent code_ss_sentence
      Code Type = Py
      Begin Routine:
        current_ss_sentence = ss_sentences.pop(0)
        current_ss_description = ss_descriptions.pop(0)
        current_ss_description = (f'{current_ss_description[0]}, '
                                  f'{current_ss_description[1]}')
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent text_ss_description
      color = black
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $current_ss_description
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    TextComponent text_ss_sentence
      color = black
      font [set every repeat] = $config.sentence_span.text.sentences.font
      letterHeight [set every repeat] = $config.sentence_span.text.sentences.size
      startVal [time (s)] = 0.0
      text [set every repeat] = $current_ss_sentence
      wrapWidth = text_wrap_width
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    KeyboardComponent key_resp_ss_sentence
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction
    CodeComponent code_instruction
      Code Type = Py
      Begin Routine:
        instruction_filepath = instruction_filepaths.pop(0)

        # the following is just needed because of a bug in psychopy
        # where images will get a grey border. a workaround is
        # setting up an aperture to hide these borders.

        from PIL import Image
        instr_img_size = Image.open(instruction_filepath).size

        # set aperture parameters from image size in pixels
        aperture_padding = 4
        aperture_width = instr_img_size[0] - aperture_padding
        aperture_height = instr_img_size[1] - aperture_padding

        # height scaling only scales by screen height to keep aspect ratio
        aperture_right = aperture_width / 2 / win.size[1]
        aperture_top = aperture_height / 2 / win.size[1]

        # setup rectangle vertices
        aperture_vertices = [
            [aperture_right, aperture_top],
            [aperture_right, -aperture_top],
            [-aperture_right, -aperture_top],
            [-aperture_right, aperture_top],
        ]

        aperture_instruction = visual.Aperture(win, size=1, shape=aperture_vertices, units='height')
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
      End Routine:
        del aperture_instruction
    ImageComponent image_instruction
      image [set every repeat] = $instruction_filepath
      size [set every repeat] = instr_img_size
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_instruction
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ApertureComponent aperture_dummy
      size = 10
      startVal [time (s)] = 0.0
      units = norm
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  Routine end
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Everything tested. Closing in 1 second.
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  Routine ss_sentence_summary
    CodeComponent code_ss_sentence_summary
      Code Type = Py
      Begin Routine:
        from tasks.sentence_span import SentenceSpanTask
        ss_task = SentenceSpanTask(language=language, seed=0, config=config.sentence_span)

        ss_sentences = (
            ss_task.sentences['practice'][True] +
            ss_task.sentences['practice'][False] +
            ss_task.sentences['trials'][True] +
            ss_task.sentences['trials'][False]
        )
        ss_descriptions = (
            [('practice', True) for _ in ss_task.sentences['practice'][True]] +
            [('practice', False) for _ in ss_task.sentences['practice'][False]] +
            [('trials', True) for _ in ss_task.sentences['trials'][True]] +
            [('trials', False) for _ in ss_task.sentences['trials'][False]]
        )

        n_ss_sentences = len(ss_sentences)
        n_ss_practice = (len(ss_task.sentences['practice'][True]) +
                         len(ss_task.sentences['practice'][False]))
        n_ss_practice_t = len(ss_task.sentences['practice'][True])
        n_ss_practice_f = len(ss_task.sentences['practice'][False])
        n_ss_trials = (len(ss_task.sentences['trials'][True]) +
                       len(ss_task.sentences['trials'][False]))
        n_ss_trials_t = len(ss_task.sentences['trials'][True])
        n_ss_trials_f = len(ss_task.sentences['trials'][False])


        ss_summary = (
            f'sentence span summary: \n\n'
            f'total number of sentences: {n_ss_sentences}\n\n'
            f'total number of practice sentences: {n_ss_practice}\n'
            f'true: {n_ss_practice_t}, false: {n_ss_practice_f}\n\n'
            f'total number of trial sentences: {n_ss_trials}\n'
            f'true: {n_ss_trials_t}, false: {n_ss_trials_f}\n\n'
        )

        print()
        print("==================================================")
        print(ss_sentences)
        print("number of ss sentences:", n_ss_sentences)
        print("==================================================")
        print()
    TextComponent text_ss_sentence_summary
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $ss_summary
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    KeyboardComponent key_resp_ss_sentence_summary
      forceEndRoutine = True
      startVal [time (s)] = 1
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Flow
  Routine init
  LoopInitiator experiment_message_loop loopType="TrialHandler"
    loopType = sequential
    nReps = n_experiment_messages
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    Routine experiment_message
  LoopTerminator experiment_message_loop
  LoopInitiator instruction_loop loopType="TrialHandler"
    loopType = random
    nReps = n_instructions
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    Routine instruction
  LoopTerminator instruction_loop
  Routine ss_sentence_summary
  LoopInitiator ss_sentence_loop loopType="TrialHandler"
    loopType = sequential
    nReps = n_ss_sentences
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    Routine ss_sentence
  LoopTerminator ss_sentence_loop
  Routine end
