PsychoPy2experiment version="2020.2.10"
Settings
  Audio lib = pygame
  Data filename = u'data/psychopy_logs/%s_%s_%s' % (expInfo['Subject ID'], expName, expInfo['date'])
  Enable Escape = False
  Experiment info = {'Subject ID': '', 'Language': "['English', 'English_easy', 'Deutsch', 'Chinese_simplified', 'Chinese_traditional']", 'Memory Update': 'True', 'Operation Span': 'True', 'Sentence Span': 'True', 'Spatial Short Term Memory': 'True', 'Random Seed': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = white
  expName = wmc
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Routines
  Routine base_init_trial
    CodeComponent base_code_init_trial
      Code Type = Py
      Begin Routine:
        current_trial = current_task.start_new_trial()
        do_break = current_task.has_pause()
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
  Routine base_instruction
    CodeComponent base_code_instruction
      Code Type = Py
      Begin Routine:
        instruction_filepath = instruction_filepaths.pop(0)

        # the following is just needed because of a bug in psychopy
        # where images will get a grey border. a workaround is
        # setting up an aperture to hide these borders.

        from PIL import Image
        instr_img_size = Image.open(instruction_filepath).size

        # set aperture parameters from image size in pixels
        aperture_padding = 4
        aperture_width = instr_img_size[0] - aperture_padding
        aperture_height = instr_img_size[1] - aperture_padding

        # height scaling only scales by screen height to keep aspect ratio
        aperture_right = aperture_width / 2 / win.size[1]
        aperture_top = aperture_height / 2 / win.size[1]

        # setup rectangle vertices
        aperture_vertices = [
            [aperture_right, aperture_top],
            [aperture_right, -aperture_top],
            [-aperture_right, -aperture_top],
            [-aperture_right, aperture_top],
        ]

        aperture_instruction = visual.Aperture(win, size=1, shape=aperture_vertices, units='height')
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
      End Routine:
        del aperture_instruction
    ImageComponent base_image_instruction
      image [set every repeat] = $instruction_filepath
      size [set every repeat] = instr_img_size
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent base_key_resp_instruction
      forceEndRoutine = True
      startVal [time (s)] = 0
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    ApertureComponent base_aperture_instruction
      size = 10
      startVal [time (s)] = 0.0
      units = height
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  Routine base_init
    CodeComponent base_code_init
      Code Type = Py
      Begin Experiment:
        import datetime
        import os

        from psychopy.hardware.keyboard import Keyboard

        from common.config import WMCConfig
        from common.experiment_messages import ExperimentMessages
        from common.instructions import Instructions

        # for catching experiment quit key
        experiment_keyboard = Keyboard()

        output_dir = os.path.join(os.getcwd(), 'data')

        thisExp.extraInfo['datetime'] = datetime.datetime.today()

        subject_id = thisExp.extraInfo['Subject ID']
        assert subject_id is not None, 'Please specify a subject id'
        assert subject_id != '', 'Please specify a subject id'

        language = thisExp.extraInfo['Language']

        config = WMCConfig(language=language)
        expmsgs = ExperimentMessages(language=language,
                                     encoding=config.experiment_messages.encoding)
        instructions = Instructions(language)

        do_mu_task = thisExp.extraInfo['Memory Update']
        do_os_task = thisExp.extraInfo['Operation Span']
        do_ss_task = thisExp.extraInfo['Sentence Span']
        do_sstm_task = thisExp.extraInfo['Spatial Short Term Memory']

        random_seed = thisExp.extraInfo['Random Seed']
        if random_seed is None or random_seed == '':
            random_seed = subject_id

        # task initialization is done at the experiment beginning
        # to circumvent lag when generating dots
        if do_sstm_task:
            from tasks.spatial_short_term_memory import SpatialShortTermMemoryTask
            sstm_task = SpatialShortTermMemoryTask(window=win, seed=random_seed, experiment_data=thisExp, config=config.spatial_short_term_memory)

        # set text wrap width to 90% of screen width (in height units)
        text_wrap_width = win.size[0] / win.size[1] * 0.9
      Begin Routine:
        instruction_filepaths = instructions.get_instructions('init')
        win.mouseVisible = False
        sstm_mouse.setVisible(False)
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
  Routine base_intertrial
    CodeComponent base_code_intertrial
      Code Type = Py
      Begin Routine:
        current_task.finish_trial()
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent base_text_intertrial
      letterHeight [set every repeat] = $config.experiment_messages.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.inter_trial
      units = height
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  Routine base_self_paced_break
    CodeComponent base_code_self_paced_break
      Code Type = Py
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent base_text_self_paced_break
      color = black
      font [set every repeat] = $config.experiment_messages.font
      letterHeight [set every repeat] = $config.experiment_messages.size
      startVal [time (s)] = 0.0
      text [set every repeat] = $expmsgs.self_paced_break
      units = height
      wrapWidth = text_wrap_width
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    KeyboardComponent base_key_resp_self_paced_break
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine base_after_break_pause
    CodeComponent base_code_task_break
      Code Type = Py
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent base_text_pause_after_break
      letterHeight [set every repeat] = $config.experiment_messages.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.after_break
      units = height
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  Routine base_init_task
    CodeComponent base_code_init_task
      Code Type = Py
      Begin Routine:
        # set begin task message depending on practice
        if current_task.do_practice:
            msg_task_begin = expmsgs.begin_practice
        else:
            msg_task_begin = expmsgs.begin_task

        n_trials = current_task.get_trial_count()
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent base_text_begin_task
      color = black
      font [set every repeat] = $config.experiment_messages.font
      letterHeight [set every repeat] = $config.experiment_messages.size
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_task_begin
      units = height
      wrapWidth = text_wrap_width
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    KeyboardComponent base_key_resp_task_begin
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine base_task_end
    CodeComponent base_code_task_end
      Code Type = Py
      Begin Routine:
        output_filepath = os.path.join(output_dir, f'{current_task.name}-{subject_id}.dat')
        current_task.write_results(output_filepath)
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent base_text_task_end
      color = black
      font [set every repeat] = $config.experiment_messages.font
      letterHeight [set every repeat] = $config.experiment_messages.size
      startVal [time (s)] = 0.0
      text [set every repeat] = $expmsgs.task_over
      units = height
      wrapWidth = text_wrap_width
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    KeyboardComponent base_key_resp_task_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine mu_init
    CodeComponent mu_init_code
      Code Type = Py
      Begin Routine:
        from tasks.memory_update import MemoryUpdateTask
        current_task = MemoryUpdateTask(window=win, seed=random_seed, config=config.memory_update)

        instruction_filepaths = instructions.get_instructions('mu')
        n_instruction_pages = instructions.get_instruction_page_count('mu')
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
  Routine mu_init_trial
    CodeComponent mu_code_init_trial
      Code Type = Py
      Begin Routine:
        n_digits = current_trial.get_n_digits()
        n_operations = current_trial.get_n_operations()
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent mu_text_blank
      letterHeight [set every repeat] = $config.experiment_messages.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.init_trial
      units = height
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  Routine mu_display_digit
    CodeComponent mu_code_digit
      Code Type = Py
      Begin Routine:
        current_digit, current_digit_position = current_trial.get_next_digit()
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent mu_text_digit
      color = black
      font [set every repeat] = $config.memory_update.text.font
      letterHeight [set every repeat] = $config.memory_update.text.size
      pos [set every repeat] = $current_digit_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.digit
      text [set every repeat] = $current_digit
      units = height
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  Routine mu_empty_cells
    CodeComponent mu_code_empty_cells
      Code Type = Py
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent mu_text_blank_2
      color = black
      font [set every repeat] = $config.memory_update.text.font
      letterHeight [set every repeat] = $config.memory_update.text.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.inter_item
      units = height
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  Routine mu_display_operation
    CodeComponent mu_code_operation
      Code Type = Py
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      Begin Routine:
        current_operation, current_operation_position = current_trial.get_next_operation()
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent mu_text_operation
      color = black
      font [set every repeat] = $config.memory_update.text.font
      letterHeight [set every repeat] = $config.memory_update.text.size
      pos [set every repeat] = $current_operation_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.operation
      text [set every repeat] = $current_operation
      units = height
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  Routine mu_recall
    CodeComponent mu_code_recall
      Code Type = Py
      Begin Routine:
        current_recall = current_trial.get_next_recall()
        recall_position = current_recall['position']

        correct_answer_digit = str(current_recall['result'])
        correct_answer = [correct_answer_digit, f'num_{correct_answer_digit}']

        thisExp.addData('is_practice', current_task.do_practice)
        thisExp.addData('mu_key_resp_recall.correct_answer', current_recall['result'])
        thisExp.addData('mu_key_resp_recall.position', current_recall['position'])
        thisExp.addData('mu_key_resp_recall.position_id', current_recall['position_id'])
        thisExp.addData('mu_key_resp_recall.operation_sequence', current_recall['operation_sequence'])
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
      End Routine:
        keyboard_response = mu_key_resp_recall.keys.replace('num_', '')
        is_correct = keyboard_response == str(current_recall['result'])

        thisExp.addData('mu_key_resp_recall.response', keyboard_response)
        thisExp.addData('mu_key_resp_recall.is_correct', is_correct)
    TextComponent mu_text_question_mark
      color = black
      font [set every repeat] = $config.memory_update.text.font
      letterHeight [set every repeat] = $config.memory_update.text.size
      pos [set every repeat] = $recall_position
      startVal [time (s)] = 0.0
      text = ?
      units = height
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    KeyboardComponent mu_key_resp_recall
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine mu_display_recall
    CodeComponent mu_code_display_recall
      Code Type = Py
      Begin Routine:
        keyboard_response = mu_key_resp_recall.keys.replace('num_', '')
        if keyboard_response.isspace():
            keyboard_response = '.'
        if len(keyboard_response) > 1:
            keyboard_response = '.'
        keyboard_response = keyboard_response.upper()
        current_trial.save_response(keyboard_response)
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
      End Routine:
        if current_trial.get_left_recalls() == 0:
            current_task.hide_frames()
    TextComponent mu_text_recall
      color = black
      font [set every repeat] = $config.memory_update.text.font
      letterHeight [set every repeat] = $config.memory_update.text.size
      pos [set every repeat] = $recall_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.recall
      text [set every repeat] = $keyboard_response
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  Routine os_init
    CodeComponent code_os_init
      Code Type = Py
      Begin Routine:
        from tasks.operation_span import OperationSpanTask

        current_task = OperationSpanTask(random_seed, config.operation_span)
        equation_keys = current_task.get_equation_keys()

        instruction_filepaths = instructions.get_instructions('os')
        n_instruction_pages = instructions.get_instruction_page_count('os')
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
  Routine os_init_trial
    CodeComponent os_code_init_trial
      Code Type = Py
      Begin Routine:
        n_presentations = current_trial.get_presentation_count()
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent os_text_fixation_cross
      color = black
      font [set every repeat] = $config.operation_span.text.fixation_cross.font
      letterHeight [set every repeat] = $config.operation_span.text.fixation_cross.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.init_trial
      text = +
      units = height
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  Routine os_blank
    CodeComponent os_code_text_blank
      Code Type = Py
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent os_text_blank
      letterHeight [set every repeat] = $config.experiment_messages.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.inter_item
      units = height
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  Routine os_equation
    CodeComponent os_code_equation
      Code Type = Py
      Begin Routine:
        equation = current_trial.get_next_equation()
        equation_string = str(equation)
        correct_key = current_task.key_map[equation.correct]

        thisExp.addData('is_practice', current_task.do_practice)
        thisExp.addData('os_key_resp_equation.equation_string', equation_string)
        thisExp.addData('os_key_resp_equation.equation_correct', equation.correct)
        thisExp.addData('os_key_resp_equation.correct_answer', correct_key)
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
      End Routine:
        keyboard_response = os_key_resp_equation.keys

        try:
            equation_response = current_task.inv_key_map[keyboard_response]
        except TypeError:
            equation_response = -1

        equation_rt = os_key_resp_equation.rt
        if equation_rt == []:
            equation_rt = 3.0

        current_trial.save_equation_response(equation_response, equation_rt)
    TextComponent os_text_equation
      color = black
      font [set every repeat] = $config.operation_span.text.letters.font
      letterHeight [set every repeat] = $config.operation_span.text.equations.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.equation
      text [set every repeat] = $equation_string
      units = height
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    KeyboardComponent os_key_resp_equation
      allowedKeys [set every repeat] = equation_keys
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.equation
      storeCorrect = True
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  Routine os_recall
    CodeComponent os_code_recall
      Code Type = Py
      Begin Routine:
        correct_letter = current_trial.get_next_recall_letter()

        thisExp.addData('is_practice', current_task.do_practice)
        thisExp.addData('os_key_resp_recall.correct_letter', correct_letter)

        os_allowed_keys = current_task.config.allowed_keys
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent os_text_question_mark
      color = black
      font [set every repeat] = $config.operation_span.text.letters.font
      letterHeight [set every repeat] = $config.operation_span.text.letters.size
      startVal [time (s)] = 0.0
      text = ?
      units = height
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    KeyboardComponent os_key_resp_recall
      allowedKeys [set every repeat] = os_allowed_keys
      correctAns = $correct_letter
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine os_display_recall
    CodeComponent os_code_display_recall
      Code Type = Py
      Begin Routine:
        letter_response = os_key_resp_recall.keys
        letter_rt = os_key_resp_recall.rt
        current_trial.save_letter_response(letter_response, letter_rt)
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent os_text_recall
      color = black
      font [set every repeat] = $config.operation_span.text.letters.font
      letterHeight [set every repeat] = $config.operation_span.text.letters.size
      pos = (0.075, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.recall
      text [set every repeat] = $letter_response.upper()
      units = height
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  Routine os_letter
    CodeComponent os_code_letter
      Code Type = Py
      Begin Routine:
        letter = current_trial.get_next_letter().upper()
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent os_text_letter
      color = black
      font [set every repeat] = $config.operation_span.text.letters.font
      letterHeight [set every repeat] = $config.operation_span.text.letters.size
      startVal [time (s)] = 0.
      stopVal [duration (s)] = current_task.config.timing.letter
      text [set every repeat] = $letter
      units = height
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  Routine ss_init
    CodeComponent ss_code_init
      Code Type = Py
      Begin Routine:
        from tasks.sentence_span import SentenceSpanTask

        current_task = SentenceSpanTask(language=language, seed=random_seed, config=config.sentence_span)
        sentence_keys = current_task.get_sentence_keys()

        instruction_filepaths = instructions.get_instructions('ss')
        n_instruction_pages = instructions.get_instruction_page_count('ss')
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
  Routine ss_init_trial
    CodeComponent ss_code_init_trial
      Code Type = Py
      Begin Routine:
        n_presentations = current_trial.get_presentation_count()
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent ss_text_fixation_cross
      color = black
      font [set every repeat] = $config.sentence_span.text.fixation_cross.font
      letterHeight [set every repeat] = $config.sentence_span.text.fixation_cross.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.init_trial
      text = +
      units = height
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  Routine ss_sentence
    CodeComponent ss_code_sentence
      Code Type = Py
      Begin Routine:
        sentence = current_trial.get_next_sentence()
        sentence_string = str(sentence)
        correct_key = current_task.key_map[sentence.correct]

        thisExp.addData('is_practice', current_task.do_practice)
        thisExp.addData('ss_key_resp_sentence.sentence_string', sentence_string)
        thisExp.addData('ss_key_resp_sentence.sentence_correct', sentence.correct)
        thisExp.addData('ss_key_resp_sentence.correct_answer', correct_key)
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
      End Routine:
        keyboard_response = ss_key_resp_sentence.keys

        try:
            sentence_response = current_task.inv_key_map[keyboard_response]
        except TypeError:
            sentence_response = -1

        sentence_rt = ss_key_resp_sentence.rt
        if sentence_rt == []:
            sentence_rt = 3.0

        current_trial.save_sentence_response(sentence_response, sentence_rt)
    TextComponent ss_text_sentence
      color = black
      font [set every repeat] = $config.sentence_span.text.sentences.font
      letterHeight [set every repeat] = $config.sentence_span.text.sentences.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.sentence
      text [set every repeat] = $sentence_string
      units = height
      wrapWidth = text_wrap_width
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    KeyboardComponent ss_key_resp_sentence
      allowedKeys [set every repeat] = sentence_keys
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.sentence
      storeCorrect = True
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  Routine ss_letter
    CodeComponent ss_code_letters
      Code Type = Py
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      Begin Routine:
        letter = current_trial.get_next_letter().upper()
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent ss_text_letter
      color = black
      font [set every repeat] = $config.sentence_span.text.letters.font
      letterHeight [set every repeat] = $config.sentence_span.text.letters.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.letter
      text [set every repeat] = $letter
      units = height
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  Routine ss_blank
    CodeComponent ss_code_blank
      Code Type = Py
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent ss_text_blank
      letterHeight [set every repeat] = $config.experiment_messages.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.inter_item
      units = height
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  Routine ss_recall
    CodeComponent ss_code_recall
      Code Type = Py
      Begin Routine:
        correct_letter = current_trial.get_next_recall_letter()

        thisExp.addData('is_practice', current_task.do_practice)
        thisExp.addData('ss_key_resp_recall.correct_letter', correct_letter)

        ss_allowed_keys = current_task.config.allowed_keys
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent ss_text_question_mark
      color = black
      font [set every repeat] = $config.sentence_span.text.letters.font
      letterHeight [set every repeat] = $config.sentence_span.text.letters.size
      startVal [time (s)] = 0.0
      text = ?
      units = height
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    KeyboardComponent ss_key_resp_recall
      allowedKeys [set every repeat] = ss_allowed_keys
      correctAns = $correct_letter
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine ss_display_recall
    CodeComponent ss_code_display_recall
      Code Type = Py
      Begin Routine:
        letter_response = ss_key_resp_recall.keys
        letter_rt = ss_key_resp_recall.rt
        current_trial.save_letter_response(letter_response, letter_rt)
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent ss_text_display_recall
      color = black
      font [set every repeat] = $config.sentence_span.text.letters.font
      letterHeight [set every repeat] = $config.sentence_span.text.letters.size
      pos = (0.075, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.recall
      text [set every repeat] = $letter_response.upper()
      units = height
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  Routine sstm_init
    CodeComponent sstm_code_init
      Code Type = Py
      Begin Routine:
        # task initialization is done at the experiment beginning
        # to circumvent lag when generating dots
        current_task = sstm_task

        instruction_filepaths = instructions.get_instructions('sstm')
        n_instruction_pages = instructions.get_instruction_page_count('sstm')
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
  Routine sstm_init_trial
    CodeComponent sstm_code_init_trial
      Code Type = Py
      Begin Routine:
        n_presentations = current_trial.get_presentation_count()
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent sstm_text_fixation_cross
      color = black
      font [set every repeat] = config.spatial_short_term_memory.text.fixation_cross.font
      letterHeight [set every repeat] = config.spatial_short_term_memory.text.fixation_cross.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.fixation_cross
      text = +
      units = height
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  Routine sstm_display_dot
    CodeComponent sstm_code_display_dot
      Code Type = Py
      Begin Routine:
        current_dot = current_trial.get_next_presentation()
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    PolygonComponent sstm_polygon_display_dot
      fillColor = black
      nVertices = 128
      pos [set every repeat] = current_dot
      shape = regular polygon...
      size [set every repeat] = (current_task.config.dots.size, current_task.config.dots.size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.dot
      units = height
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  Routine sstm_empty_grid
    CodeComponent sstm_code_empty_grid
      Code Type = Py
      Begin Routine:
        current_trial.grid.show(True)
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent sstm_text_blank
      letterHeight [set every repeat] = $config.experiment_messages.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.init_trial
      units = height
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  Routine sstm_recall
    CodeComponent sstm_code_recall
      Code Type = Py
      Begin Routine:
        current_trial.grid.show(True)
        win.mouseVisible = True
        sstm_mouse.setVisible(True)
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()

        current_trial.process_mouse_event(sstm_mouse)

        active_position = config.spatial_short_term_memory.text.next_button.position
        if current_trial.selected_required_count():
            sstm_text_next.pos = active_position
        else:
            sstm_text_next.pos = (10, 10)
      End Routine:
        win.mouseVisible = False
        sstm_mouse.setVisible(False)

        sstm_trial_rt = sstm_mouse.time[-1]
        current_trial.save_response(sstm_trial_rt)

        current_trial.show(False)

        thisExp.addData('is_practice', current_task.do_practice)
        thisExp.addData('sstm_recall.correct_dots', current_trial.sequence)
        thisExp.addData('sstm_recall.response_dots', current_trial.response_dots)
        thisExp.addData('sstm_recall.response_time', current_trial.response_time)
    TextComponent sstm_text_next
      color = black
      font [set every repeat] = config.spatial_short_term_memory.text.next_button.font
      letterHeight [set every repeat] = config.spatial_short_term_memory.text.next_button.size
      pos = (10, 10)
      startVal [time (s)] = 0.0
      text [set every repeat] = $expmsgs.word_next
      units = height
      wrapWidth = text_wrap_width
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    MouseComponent sstm_mouse
      clickable = sstm_text_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine base_end
    CodeComponent base_code_end
      Code Type = Py
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent base_text_end
      color = black
      font [set every repeat] = $config.experiment_messages.font
      letterHeight [set every repeat] = $config.experiment_messages.size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $expmsgs.experiment_over
      units = height
      wrapWidth = text_wrap_width
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    KeyboardComponent base_key_resp_end
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sstm_task_end
    CodeComponent code_please_wait
      Code Type = Py
      Begin Routine:
        detailed_output_filepath = os.path.join(output_dir, 'sstm_detailed', f'{current_task.name}-{subject_id}.dat')
        current_task.write_results(detailed_output_filepath)

        overall_output_filepath = os.path.join(output_dir, f'{current_task.name}-{subject_id}.dat')
        current_task.write_overall_results(overall_output_filepath)
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent text_sstm_task_end
      color = black
      font [set every repeat] = $config.experiment_messages.font
      letterHeight [set every repeat] = $config.experiment_messages.size
      startVal [time (s)] = 0.0
      text = $expmsgs.task_over
      units = height
      wrapWidth = text_wrap_width
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    KeyboardComponent sstm_key_resp_task_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sstm_draw_request
    CodeComponent code_sstm_draw_request
      Code Type = Py
      Begin Routine:
        current_trial.grid.show(False)
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent text_sstm_draw_dots
      color = black
      font [set every repeat] = config.spatial_short_term_memory.text.draw_text.font
      letterHeight [set every repeat] = config.spatial_short_term_memory.text.draw_text.size
      pos = (0, -0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.draw_request
      text [set every repeat] = $expmsgs.draw_dots
      units = height
      wrapWidth = text_wrap_width
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    TextComponent text_sstm_presentation_end
      color = black
      font [set every repeat] = config.spatial_short_term_memory.text.end_text.font
      letterHeight [set every repeat] = config.spatial_short_term_memory.text.end_text.size
      pos = (0, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.draw_request
      text [set every repeat] = $expmsgs.word_end
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  Routine sstm_after_display_dot
    CodeComponent sstm_code_after_display_dot
      Code Type = Py
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent sstm_text_after_display_dot
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = current_task.config.timing.inter_item
      units = height
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  Routine base_next_trial
    CodeComponent base_code_next_trial
      Code Type = Py
      Each Frame:
        if experiment_keyboard.getKeys(keyList=[config.common.abort_key], clear=False):
            core.quit()
    TextComponent base_text_next_trial
      color = black
      font [set every repeat] = $config.experiment_messages.font
      letterHeight [set every repeat] = $config.experiment_messages.size
      startVal [time (s)] = 0.0
      text [set every repeat] = $expmsgs.next_trial
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    KeyboardComponent base_next_trial_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine base_init
  Routine base_instruction
  LoopInitiator do_memory_update_dummy loopType="TrialHandler"
    loopType = random
    nReps = $do_mu_task
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    Routine mu_init
    LoopInitiator mu_instruction_pages loopType="TrialHandler"
      loopType = sequential
      nReps = $n_instruction_pages
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      Routine base_instruction
    LoopTerminator mu_instruction_pages
    LoopInitiator mu_practice_dummy loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine base_init_task
      LoopInitiator mu_trials loopType="TrialHandler"
        loopType = random
        nReps = $n_trials
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        Routine base_init_trial
        Routine mu_init_trial
        LoopInitiator mu_presentations loopType="TrialHandler"
          loopType = random
          nReps = $n_digits
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          Routine mu_display_digit
          Routine mu_empty_cells
        LoopTerminator mu_presentations
        LoopInitiator mu_operations loopType="TrialHandler"
          loopType = random
          nReps = $n_operations
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          Routine mu_display_operation
          Routine mu_empty_cells
        LoopTerminator mu_operations
        LoopInitiator mu_recalls loopType="TrialHandler"
          loopType = random
          nReps = $n_digits
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          Routine mu_recall
          Routine mu_display_recall
        LoopTerminator mu_recalls
        LoopInitiator mu_base_next_trial_dummy loopType="TrialHandler"
          loopType = random
          nReps = current_task.get_left_trials() > 0
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          Routine base_next_trial
        LoopTerminator mu_base_next_trial_dummy
        Routine base_intertrial
      LoopTerminator mu_trials
    LoopTerminator mu_practice_dummy
    Routine base_task_end
  LoopTerminator do_memory_update_dummy
  LoopInitiator do_operation_span_dummy loopType="TrialHandler"
    loopType = random
    nReps = $do_os_task
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    Routine os_init
    LoopInitiator os_instruction_pages loopType="TrialHandler"
      loopType = random
      nReps = $n_instruction_pages
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      Routine base_instruction
    LoopTerminator os_instruction_pages
    LoopInitiator os_practice_dummy loopType="TrialHandler"
      loopType = sequential
      nReps = 2
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      Routine base_init_task
      LoopInitiator os_trials loopType="TrialHandler"
        loopType = random
        nReps = $n_trials
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        Routine base_init_trial
        Routine os_init_trial
        LoopInitiator os_presentations loopType="TrialHandler"
          loopType = random
          nReps = n_presentations
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          Routine os_equation
          Routine os_letter
          Routine os_blank
        LoopTerminator os_presentations
        LoopInitiator os_recalls loopType="TrialHandler"
          loopType = random
          nReps = $n_presentations
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          Routine os_recall
          Routine os_display_recall
        LoopTerminator os_recalls
        Routine base_intertrial
        LoopInitiator os_break_dummy loopType="TrialHandler"
          loopType = random
          nReps = $do_break
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          Routine base_self_paced_break
          Routine base_after_break_pause
        LoopTerminator os_break_dummy
      LoopTerminator os_trials
    LoopTerminator os_practice_dummy
    Routine base_task_end
  LoopTerminator do_operation_span_dummy
  LoopInitiator do_sentence_span_dummy loopType="TrialHandler"
    loopType = random
    nReps = $do_ss_task
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    Routine ss_init
    LoopInitiator ss_instruction_pages loopType="TrialHandler"
      loopType = random
      nReps = $n_instruction_pages
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      Routine base_instruction
    LoopTerminator ss_instruction_pages
    LoopInitiator ss_practice_dummy loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine base_init_task
      LoopInitiator ss_trials loopType="TrialHandler"
        loopType = random
        nReps = $n_trials
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        Routine base_init_trial
        Routine ss_init_trial
        LoopInitiator ss_presentations loopType="TrialHandler"
          loopType = random
          nReps = $n_presentations
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          Routine ss_sentence
          Routine ss_letter
          Routine ss_blank
        LoopTerminator ss_presentations
        LoopInitiator ss_recalls loopType="TrialHandler"
          loopType = random
          nReps = $n_presentations
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          Routine ss_recall
          Routine ss_display_recall
        LoopTerminator ss_recalls
        Routine base_intertrial
        LoopInitiator ss_break_dummy loopType="TrialHandler"
          loopType = random
          nReps = $do_break
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          Routine base_self_paced_break
          Routine base_after_break_pause
        LoopTerminator ss_break_dummy
      LoopTerminator ss_trials
    LoopTerminator ss_practice_dummy
    Routine base_task_end
  LoopTerminator do_sentence_span_dummy
  LoopInitiator do_spatial_short_term_memory_dummy loopType="TrialHandler"
    loopType = random
    nReps = $do_sstm_task
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    Routine sstm_init
    LoopInitiator sstm_instruction_pages loopType="TrialHandler"
      loopType = sequential
      nReps = $n_instruction_pages
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      Routine base_instruction
    LoopTerminator sstm_instruction_pages
    LoopInitiator sstm_practice_dummy loopType="TrialHandler"
      loopType = sequential
      nReps = 2
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      Routine base_init_task
      LoopInitiator sstm_trials loopType="TrialHandler"
        loopType = sequential
        nReps = $n_trials
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        Routine base_init_trial
        Routine sstm_init_trial
        Routine sstm_empty_grid
        LoopInitiator sstm_presentations loopType="TrialHandler"
          loopType = sequential
          nReps = $n_presentations
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          Routine sstm_display_dot
          Routine sstm_after_display_dot
        LoopTerminator sstm_presentations
        Routine sstm_draw_request
        Routine sstm_recall
        LoopInitiator sstm_next_trial_dummy loopType="TrialHandler"
          loopType = random
          nReps = current_task.get_left_trials() > 0
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          Routine base_next_trial
        LoopTerminator sstm_next_trial_dummy
        Routine base_intertrial
      LoopTerminator sstm_trials
    LoopTerminator sstm_practice_dummy
    Routine sstm_task_end
  LoopTerminator do_spatial_short_term_memory_dummy
  Routine base_end
